/gamos/setParam GmGeometryFromText:FileName ../exercise1/exercise1.geom
/gamos/geometry GmGeometryFromText
### -plane bremsstrahlung splitting
/gamos/setParam GmParticleSplittingProcess:NSplit 100
/gamos/setParam GmPSZPlaneDirChecker:XDim 15.*cm
/gamos/setParam GmPSZPlaneDirChecker:YDim 15.*cm
/gamos/setParam GmPSZPlaneDirChecker:ZPos 10.*cm
/gamos/physicsList GmPSEMPhysics
/gamos/GmPhysics/addPhysics electron-lowener-ZBS
/gamos/GmPhysics/addPhysics positron-standard-ZBS
/gamos/GmPhysics/addPhysics gamma-standard

/gamos/generator GmGenerator

/run/initialize

### Generator distributions 
/gamos/generator/addSingleParticleSource mySource e- 150.*keV
/gamos/generator/positionDist mySource GmGenerDistPositionInG4Volumes Source
/gamos/generator/directionDist mySource GmGenerDistDirectionConst 0. 1. 0.

### Faster multiple scattering
/process/msc/StepLimit Minimal

### Write phase space
/gamos/setParam RTPhaseSpaceUA:FileName xrayZBS
/gamos/setParam RTPhaseSpaceUA:ZStops 10.*cm
/gamos/userAction RTPhaseSpaceUA

### Print some info
/gamos/userAction GmCountProcessesUA
/gamos/userAction GmCountTracksUA

/gamos/random/setSeeds 2142  22211 

/run/beamOn 1000000

